# Generated by Configurator on Wed Dec 31 17:17:01 GMT 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM12,SerialManager,COM12
Device,FLIMduino-Hub,FLIMduino,FLIMduino-Hub
Device,FLIMduino-Trigger,FLIMduino,FLIMduino-Trigger
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM

# Pre-init settings for devices
Property,FLIMduino-Hub,Logic,Normal
Property,FLIMduino-Hub,Port,COM12

# Pre-init settings for COM ports
Property,COM12,AnswerTimeout,500.0000
Property,COM12,BaudRate,9600
Property,COM12,DelayBetweenCharsMs,0.0000
Property,COM12,Handshaking,Off
Property,COM12,Parity,None
Property,COM12,StopBits,1
Property,COM12,Verbose,0

# Hub (parent) references
Parent,FLIMduino-Trigger,FLIMduino-Hub

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

