# Generated by Configurator on Wed Aug 20 20:28:20 BST 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM4,SerialManager,COM4
Device,COM5,SerialManager,COM5
Device,COM6,SerialManager,COM6
Device,OlympusHub,Olympus,OlympusHub
Device,Objective,Olympus,Objective
Device,LightPath,Olympus,LightPath
Device,FilterCube,Olympus,FilterCube
Device,ManualFocus,Olympus,ManualFocus
Device,AutoFocusZDC,Olympus,AutoFocusZDC
Device,ITK Corvus Controller,Corvus,ITK Corvus Controller
Device,XY Stage,Corvus,XY Stage
Device,CSUX-Hub,CSUX,CSUX-Hub
Device,CSUX-Dichroic Mirror,CSUX,CSUX-Dichroic Mirror
Device,CSUX-Shutter,CSUX,CSUX-Shutter
Device,CSUX-DriveSpeed,CSUX,CSUX-DriveSpeed

# Pre-init settings for devices
Property,OlympusHub,Port,COM5
Property,ITK Corvus Controller,Port,COM4
Property,CSUX-Hub,Port,COM6

# Pre-init settings for COM ports
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,19200
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,Even
Property,COM5,StopBits,2
Property,COM5,Verbose,1
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,115200
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Shutter,CSUX-Shutter
Property,Core,Focus,ManualFocus
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Objective
Label,Objective,5,20x
Label,Objective,4,10x
Label,Objective,3,40x
Label,Objective,2,Position-3
Label,Objective,1,Position-2
Label,Objective,0,Back focal plane target
# LightPath
Label,LightPath,1,FLIM
Label,LightPath,0,Trinocular
# FilterCube
Label,FilterCube,5,Position-6
Label,FilterCube,4,Position-5
Label,FilterCube,3,Position-4
Label,FilterCube,2,Position-3
Label,FilterCube,1,Position-2
Label,FilterCube,0,Position-1
# CSUX-Dichroic Mirror
Label,CSUX-Dichroic Mirror,2,Dichroic-3
Label,CSUX-Dichroic Mirror,1,Dichroic-2
Label,CSUX-Dichroic Mirror,0,Dichroic-1

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

