# Generated by Configurator on Wed Aug 20 19:13:39 BST 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,OlympusHub,Olympus,OlympusHub
Device,Objective,Olympus,Objective
Device,LightPath,Olympus,LightPath
Device,FilterCube,Olympus,FilterCube
Device,ManualFocus,Olympus,ManualFocus
Device,AutoFocusZDC,Olympus,AutoFocusZDC

# Pre-init settings for devices
Property,OlympusHub,Port,COM5

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,19200
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,Even
Property,COM5,StopBits,2
Property,COM5,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Focus,ManualFocus
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Objective
Label,Objective,5,20x
Label,Objective,4,10x
Label,Objective,3,40x
Label,Objective,2,Position-3
Label,Objective,1,Position-2
Label,Objective,0,Back focal plane target
# LightPath
Label,LightPath,1,FLIM
Label,LightPath,0,Trinocular
# FilterCube
Label,FilterCube,5,Position-6
Label,FilterCube,4,Position-5
Label,FilterCube,3,Position-4
Label,FilterCube,2,Position-3
Label,FilterCube,1,Position-2
Label,FilterCube,0,Position-1

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

