# Generated by Configurator on Wed Nov 26 19:12:59 GMT 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM20,SerialManager,COM20
Device,COM21,SerialManager,COM21
Device,COM1,SerialManager,COM1
Device,COM2,SerialManager,COM2
Device,COM6,SerialManager,COM6
Device,COM7,SerialManager,COM7
Device,OlympusHub,Olympus,OlympusHub
Device,Objective,Olympus,Objective
Device,LightPathPrism,Olympus,LightPath
Device,FilterCube,Olympus,FilterCube
Device,AutoFocusZDC,Olympus,AutoFocusZDC
Device,CSUX-Hub,CSUX,CSUX-Hub
Device,CSUX-Filter Wheel,CSUX,CSUX-Filter Wheel
Device,CSUX-Dichroic Mirror,CSUX,CSUX-Dichroic Mirror
Device,CSUX-Shutter,CSUX,CSUX-Shutter
Device,SpectralFW,ThorlabsFilterWheel,Thorlabs Filter Wheel
Device,NDFW,ThorlabsFilterWheel,Thorlabs Filter Wheel
Device,ITK Corvus Controller,Corvus,ITK Corvus Controller
Device,XY Stage,Corvus,XY Stage

# Pre-init settings for devices
Property,OlympusHub,Port,COM7
Property,CSUX-Hub,Port,COM21
Property,CSUX-Filter Wheel,WheelNumber,1
Property,SpectralFW,Port,COM2
Property,NDFW,Port,COM1
Property,ITK Corvus Controller,Port,COM6

# Pre-init settings for COM ports
Property,COM20,AnswerTimeout,500.0000
Property,COM20,BaudRate,9600
Property,COM20,DelayBetweenCharsMs,0.0000
Property,COM20,Handshaking,Off
Property,COM20,Parity,None
Property,COM20,StopBits,1
Property,COM20,Verbose,1
Property,COM21,AnswerTimeout,500.0000
Property,COM21,BaudRate,115200
Property,COM21,DelayBetweenCharsMs,0.0000
Property,COM21,Handshaking,Off
Property,COM21,Parity,None
Property,COM21,StopBits,1
Property,COM21,Verbose,0
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,115200
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,0
Property,COM2,AnswerTimeout,500.0000
Property,COM2,BaudRate,115200
Property,COM2,DelayBetweenCharsMs,0.0000
Property,COM2,Handshaking,Off
Property,COM2,Parity,None
Property,COM2,StopBits,1
Property,COM2,Verbose,0
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,0
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,19200
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Handshaking,Off
Property,COM7,Parity,Even
Property,COM7,StopBits,2
Property,COM7,Verbose,0

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Shutter,CSUX-Shutter
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Objective
Label,Objective,5,Position-6
Label,Objective,4,Position-5
Label,Objective,3,Position-4
Label,Objective,2,Position-3
Label,Objective,1,Position-2
Label,Objective,0,Position-1
# LightPathPrism
Label,LightPathPrism,1,Side Port
Label,LightPathPrism,0,Eye
# FilterCube
Label,FilterCube,5,Position-6
Label,FilterCube,4,Position-5
Label,FilterCube,3,Position-4
Label,FilterCube,2,Position-3
Label,FilterCube,1,Position-2
Label,FilterCube,0,Position-1
# CSUX-Filter Wheel
Label,CSUX-Filter Wheel,5,Filter-6
Label,CSUX-Filter Wheel,4,Filter-5
Label,CSUX-Filter Wheel,3,Filter-4
Label,CSUX-Filter Wheel,2,Filter-3
Label,CSUX-Filter Wheel,1,Filter-2
Label,CSUX-Filter Wheel,0,Filter-1
# CSUX-Dichroic Mirror
Label,CSUX-Dichroic Mirror,2,Dichroic-3
Label,CSUX-Dichroic Mirror,1,Dichroic-2
Label,CSUX-Dichroic Mirror,0,Dichroic-1
# SpectralFW
Label,SpectralFW,5,Filter-6
Label,SpectralFW,4,Filter-5
Label,SpectralFW,3,Filter-4
Label,SpectralFW,2,Filter-3
Label,SpectralFW,1,Filter-2
Label,SpectralFW,0,Filter-1
# NDFW
Label,NDFW,5,Filter-6
Label,NDFW,4,Filter-5
Label,NDFW,3,Filter-4
Label,NDFW,2,Filter-3
Label,NDFW,1,Filter-2
Label,NDFW,0,Filter-1

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

