# Generated by Configurator on Mon Dec 08 13:09:33 GMT 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM6,SerialManager,COM6
Device,COM10,SerialManager,COM10
Device,COM11,SerialManager,COM11
Device,COM7,SerialManager,COM7
Device,COM8,SerialManager,COM8
Device,COM4,SerialManager,COM4
Device,VS14MCam,Artemis,VS14MCam
Device,Delay box,Kentech,KentechHDG800
Device,FianiumSC,FianiumPrototype,FianiumSC
Device,ITK Corvus Controller,Corvus,ITK Corvus Controller
Device,XY Stage,Corvus,XY Stage
Device,NDFW,ThorlabsFilterWheel,Thorlabs Filter Wheel
Device,SpectralFW,ThorlabsFilterWheel,Thorlabs Filter Wheel
Device,CSUX-Hub,CSUX,CSUX-Hub
Device,CSUX-Filter Wheel,CSUX,CSUX-Filter Wheel
Device,CSUX-Dichroic Mirror,CSUX,CSUX-Dichroic Mirror
Device,CSUX-Shutter,CSUX,CSUX-Shutter
Device,OlympusHub,Olympus,OlympusHub
Device,Objective,Olympus,Objective
Device,LightPathPrism,Olympus,LightPath
Device,FilterCube,Olympus,FilterCube
Device,ManualFocus,Olympus,ManualFocus
Device,AutoFocusZDC,Olympus,AutoFocusZDC
Device,Flea2Cam,PointGreyResearch,Flea2Cam

# Pre-init settings for devices
Property,VS14MCam,MaximumExposureMs,86400000.0000
Property,Delay box,Monostable,False
Property,Delay box,Polarity,Positive
Property,Delay box,Port,COM7
Property,FianiumSC,Port,COM8
Property,ITK Corvus Controller,Port,COM5
Property,NDFW,Port,COM10
Property,SpectralFW,Port,COM11
Property,CSUX-Hub,Port,COM6
Property,CSUX-Filter Wheel,WheelNumber,1
Property,OlympusHub,Port,COM4
Property,Flea2Cam,MaximumExposureMs,10000.0000

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,0
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,115200
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,0
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,115200
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,0
Property,COM11,AnswerTimeout,500.0000
Property,COM11,BaudRate,115200
Property,COM11,DelayBetweenCharsMs,0.0000
Property,COM11,Handshaking,Off
Property,COM11,Parity,None
Property,COM11,StopBits,1
Property,COM11,Verbose,0
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,9600
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,0
Property,COM8,AnswerTimeout,500.0000
Property,COM8,BaudRate,19200
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,0
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,19200
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,Even
Property,COM4,StopBits,2
Property,COM4,Verbose,0

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,VS14MCam
Property,Core,Shutter,CSUX-Shutter
Property,Core,Focus,ManualFocus
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# NDFW
Label,NDFW,5,0
Label,NDFW,4,STOP
Label,NDFW,3,2.0
Label,NDFW,2,1.0
Label,NDFW,1,0.2
Label,NDFW,0,0.1
# SpectralFW
Label,SpectralFW,5,560/25
Label,SpectralFW,4,500/20
Label,SpectralFW,3,434/17
Label,SpectralFW,2,620/60
Label,SpectralFW,1,525/50
Label,SpectralFW,0,465/30
# CSUX-Filter Wheel
Label,CSUX-Filter Wheel,5,494/20
Label,CSUX-Filter Wheel,4,620/52
Label,CSUX-Filter Wheel,3,585/40
Label,CSUX-Filter Wheel,2,520/35
Label,CSUX-Filter Wheel,1,482/35
Label,CSUX-Filter Wheel,0,STOP
# CSUX-Dichroic Mirror
Label,CSUX-Dichroic Mirror,2,488-532
Label,CSUX-Dichroic Mirror,1,442-514-647
Label,CSUX-Dichroic Mirror,0,473-561
# Objective
Label,Objective,5,UPlanFl 20x 0.5
Label,Objective,4,UPlanApo 10x 0.4
Label,Objective,3,LUCPlanFLN 40x 0.6
Label,Objective,2,UPlanApo 4x 0.16
Label,Objective,1,UPlanSApo 100x 1.4 Oil
Label,Objective,0,BFP target
# LightPathPrism
Label,LightPathPrism,1,Side Port
Label,LightPathPrism,0,Eye
# FilterCube
Label,FilterCube,5,UV (377/50-409-409LP)
Label,FilterCube,4,RFP (545/30-570-610/75)
Label,FilterCube,3,GFP (472/30-495-520/35)
Label,FilterCube,2,CFP (438/24-458-483/32)
Label,FilterCube,1,YFP (500/24-520-542/27)
Label,FilterCube,0,Empty (Sectioned)

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

