# Generated by Configurator on Wed Dec 03 07:32:34 GMT 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM6,SerialManager,COM6
Device,COM10,SerialManager,COM10
Device,COM11,SerialManager,COM11
Device,COM7,SerialManager,COM7
Device,COM8,SerialManager,COM8
Device,VS14MCam,Artemis,VS14MCam
Device,KentechHDG800,Kentech,KentechHDG800
Device,FianiumSC,FianiumPrototype,FianiumSC
Device,ITK Corvus Controller,Corvus,ITK Corvus Controller
Device,XY Stage,Corvus,XY Stage
Device,NDFW,ThorlabsFilterWheel,Thorlabs Filter Wheel
Device,SpectralFW,ThorlabsFilterWheel,Thorlabs Filter Wheel

# Pre-init settings for devices
Property,VS14MCam,MaximumExposureMs,86400000.0000
Property,KentechHDG800,Monostable,False
Property,KentechHDG800,Polarity,Positive
Property,KentechHDG800,Port,COM7
Property,FianiumSC,Port,COM8
Property,ITK Corvus Controller,Port,COM5
Property,NDFW,Port,COM10
Property,SpectralFW,Port,COM11

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,0
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,115200
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,0
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,115200
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,0
Property,COM11,AnswerTimeout,500.0000
Property,COM11,BaudRate,115200
Property,COM11,DelayBetweenCharsMs,0.0000
Property,COM11,Handshaking,Off
Property,COM11,Parity,None
Property,COM11,StopBits,1
Property,COM11,Verbose,0
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,9600
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,0
Property,COM8,AnswerTimeout,500.0000
Property,COM8,BaudRate,19200
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,0

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays
Delay,NDFW,100.0
Delay,SpectralFW,100.0

# Roles
Property,Core,Camera,VS14MCam
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# NDFW
Label,NDFW,5,0
Label,NDFW,4,STOP
Label,NDFW,3,2.0
Label,NDFW,2,1.0
Label,NDFW,1,0.2
Label,NDFW,0,0.1
# SpectralFW
Label,SpectralFW,5,560/25
Label,SpectralFW,4,500/20
Label,SpectralFW,3,434/17
Label,SpectralFW,2,620/60
Label,SpectralFW,1,525/50
Label,SpectralFW,0,465/30

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

