# Generated by Configurator on Tue Dec 02 23:35:29 GMT 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM6,SerialManager,COM6
Device,COM7,SerialManager,COM7
Device,COM8,SerialManager,COM8
Device,VS14MCam,Artemis,VS14MCam
Device,KentechHDG800,Kentech,KentechHDG800
Device,FianiumSC,FianiumPrototype,FianiumSC
Device,ITK Corvus Controller,Corvus,ITK Corvus Controller
Device,XY Stage,Corvus,XY Stage

# Pre-init settings for devices
Property,VS14MCam,MaximumExposureMs,86400000.0000
Property,KentechHDG800,Monostable,False
Property,KentechHDG800,Polarity,Positive
Property,KentechHDG800,Port,COM7
Property,FianiumSC,Port,COM8
Property,ITK Corvus Controller,Port,COM5

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,0
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,115200
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,0
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,9600
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,0
Property,COM8,AnswerTimeout,500.0000
Property,COM8,BaudRate,19200
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,0

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,VS14MCam
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

