# Generated by Configurator on Tue Dec 02 14:31:02 GMT 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM20,SerialManager,COM20
Device,COM21,SerialManager,COM21
Device,COM1,SerialManager,COM1
Device,COM2,SerialManager,COM2
Device,COM6,SerialManager,COM6
Device,COM7,SerialManager,COM7
Device,OlympusHub,Olympus,OlympusHub
Device,Objective,Olympus,Objective
Device,LightPathPrism,Olympus,LightPath
Device,FilterCube,Olympus,FilterCube
Device,AutoFocusZDC,Olympus,AutoFocusZDC
Device,CSUX-Hub,CSUX,CSUX-Hub
Device,CSUX-Filter Wheel,CSUX,CSUX-Filter Wheel
Device,CSUX-Dichroic Mirror,CSUX,CSUX-Dichroic Mirror
Device,CSUX-Shutter,CSUX,CSUX-Shutter
Device,SpectralFW,ThorlabsFilterWheel,Thorlabs Filter Wheel
Device,NDFW,ThorlabsFilterWheel,Thorlabs Filter Wheel
Device,ITK Corvus Controller,Corvus,ITK Corvus Controller
Device,XY Stage,Corvus,XY Stage
Device,ManualFocus,Olympus,ManualFocus

# Pre-init settings for devices
Property,OlympusHub,Port,COM7
Property,CSUX-Hub,Port,COM21
Property,CSUX-Filter Wheel,WheelNumber,1
Property,SpectralFW,Port,COM2
Property,NDFW,Port,COM1
Property,ITK Corvus Controller,Port,COM6

# Pre-init settings for COM ports
Property,COM20,AnswerTimeout,500.0000
Property,COM20,BaudRate,9600
Property,COM20,DelayBetweenCharsMs,0.0000
Property,COM20,Handshaking,Off
Property,COM20,Parity,None
Property,COM20,StopBits,1
Property,COM20,Verbose,1
Property,COM21,AnswerTimeout,500.0000
Property,COM21,BaudRate,115200
Property,COM21,DelayBetweenCharsMs,0.0000
Property,COM21,Handshaking,Off
Property,COM21,Parity,None
Property,COM21,StopBits,1
Property,COM21,Verbose,0
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,115200
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,0
Property,COM2,AnswerTimeout,500.0000
Property,COM2,BaudRate,115200
Property,COM2,DelayBetweenCharsMs,0.0000
Property,COM2,Handshaking,Off
Property,COM2,Parity,None
Property,COM2,StopBits,1
Property,COM2,Verbose,0
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,0
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,19200
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Handshaking,Off
Property,COM7,Parity,Even
Property,COM7,StopBits,2
Property,COM7,Verbose,0

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays
Delay,SpectralFW,1000.0
Delay,NDFW,1000.0

# Roles
Property,Core,Shutter,CSUX-Shutter
Property,Core,Focus,ManualFocus
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Objective
Label,Objective,5,UPlanFl 20x 0.5
Label,Objective,4,UPlanApo 10x 0.4
Label,Objective,3,LUCPlanFLN 40x 0.6
Label,Objective,2,UPlanApo 4x 0.16
Label,Objective,1,UPlanSApo 100x 1.4 Oil
Label,Objective,0,BFP target
# LightPathPrism
Label,LightPathPrism,1,Side Port
Label,LightPathPrism,0,Eye
# FilterCube
Label,FilterCube,5,UV (377/50-409-409LP)
Label,FilterCube,4,RFP (545/30-570-610/75)
Label,FilterCube,3,GFP (472/30-495-520/35)
Label,FilterCube,2,CFP (438/24-458-483/32)
Label,FilterCube,1,YFP (500/24-520-542/27)
Label,FilterCube,0,Empty (Sectioned)
# CSUX-Filter Wheel
Label,CSUX-Filter Wheel,5,494/20
Label,CSUX-Filter Wheel,4,620/52
Label,CSUX-Filter Wheel,3,585/40
Label,CSUX-Filter Wheel,2,520/35
Label,CSUX-Filter Wheel,1,482/35
Label,CSUX-Filter Wheel,0,STOP
# CSUX-Dichroic Mirror
Label,CSUX-Dichroic Mirror,2,473-561
Label,CSUX-Dichroic Mirror,1,442-514-647
Label,CSUX-Dichroic Mirror,0,488-532
# SpectralFW
Label,SpectralFW,5,560/25
Label,SpectralFW,4,500/20
Label,SpectralFW,3,434/17
Label,SpectralFW,2,620/60
Label,SpectralFW,1,525/50
Label,SpectralFW,0,465/30
# NDFW
Label,NDFW,5,0
Label,NDFW,4,STOP
Label,NDFW,3,2.0
Label,NDFW,2,1.0
Label,NDFW,1,0.2
Label,NDFW,0,0.1

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

