# Generated by Configurator on Thu Dec 11 14:52:11 GMT 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM8,SerialManager,COM8
Device,FianiumSC,FianiumPrototype,FianiumSC

# Pre-init settings for devices
Property,FianiumSC,Port,COM8

# Pre-init settings for COM ports
Property,COM8,AnswerTimeout,500.0000
Property,COM8,BaudRate,19200
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,0

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

