# Generated by Configurator on Wed Aug 20 18:33:24 BST 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM4,SerialManager,COM4
Device,ITK Corvus Controller,Corvus,ITK Corvus Controller
Device,XY Stage,Corvus,XY Stage

# Pre-init settings for devices
Property,ITK Corvus Controller,Port,COM4

# Pre-init settings for COM ports
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

